/gate/geometry/setMaterialDatabase myGateMaterials.db

#	V I S U A L I S A T I O N
/vis/open OGLSX
/vis/viewer/set/viewpointThetaPhi 60 60
/vis/viewer/zoom 1.5
/vis/drawVolume
/vis/viewer/flush
/tracking/verbose 0
/tracking/storeTrajectory 1
/vis/scene/add/trajectories 
/vis/scene/endOfEventAction accumulate


/gate/world/setMaterial Vacuum 
/gate/world/geometry/setXLength 10.0 m
/gate/world/geometry/setYLength 10.0 m
/gate/world/geometry/setZLength 10.0 m

/gate/world/daughters/name Cone1
/gate/world/daughters/insert cone
/gate/Cone1/setMaterial BGO
/gate/Cone1/geometry/setRmin1 0.0 m
/gate/Cone1/geometry/setRmax1 1.5 m
/gate/Cone1/geometry/setRmin2 0.0 m
/gate/Cone1/geometry/setRmax2 1.0 m
/gate/Cone1/geometry/setHeight 2.0 m

#	V I S U A L I S A T I O N
/vis/viewer/set/viewpointThetaPhi 60 60
/vis/viewer/zoom 1.2


/gate/run/initialize
