/gate/geometry/setMaterialDatabase myGateMaterials.db

/gate/world/geometry/setMaterial Vacuum 
/gate/world/geometry/setXLength 10.0 m
/gate/world/geometry/setYLength 10.0 m
/gate/world/geometry/setZLength 10.0 m

/gate/world/daughters/name Trpd1
/gate/world/daughters/insert trpd
/gate/Trpd1/geometry/setMaterial Air
/gate/Trpd1/geometry/setX1Length 2.0 m
/gate/Trpd1/geometry/setY1Length 5.0 m
/gate/Trpd1/geometry/setX2Length 2.0 m 
/gate/Trpd1/geometry/setY2Length 5.0 m
/gate/Trpd1/geometry/setZLength  4.0 m

#	V I S U A L I S A T I O N
/vis/viewer/set/viewpointThetaPhi 60 60
/vis/viewer/zoom 1.2

/gate/run/initialize
