#Energy Spectrum Target

/gate/actor/addActor  EnergySpectrumActor  MyActor
/gate/actor/MyActor/save  Target.root
/gate/actor/MyActor/attachTo	Target
/gate/actor/MyActor/energySpectrum/setEmin 0 eV
/gate/actor/MyActor/energySpectrum/setEmax 0.1 keV
/gate/actor/MyActor/energySpectrum/setNumberOfBins 10
/gate/actor/MyActor/energyLossHisto/setEmin 0 eV
/gate/actor/MyActor/energyLossHisto/setEmax 0.1 keV
/gate/actor/MyActor/energyLossHisto/setNumberOfBins 10

#Energy Spectrum Target1
/gate/actor/addActor  EnergySpectrumActor  MyActor1
/gate/actor/MyActor1/save  Target1.root
/gate/actor/MyActor1/attachTo	Target1
/gate/actor/MyActor1/energySpectrum/setEmin 0 eV
/gate/actor/MyActor1/energySpectrum/setEmax 0.1 keV
/gate/actor/MyActor1/energySpectrum/setNumberOfBins 10
/gate/actor/MyActor1/energyLossHisto/setEmin 0 eV
/gate/actor/MyActor1/energyLossHisto/setEmax 0.1 keV
/gate/actor/MyActor1/energyLossHisto/setNumberOfBins 10

#Energy Spectrum Target2
/gate/actor/addActor  EnergySpectrumActor  MyActor2
/gate/actor/MyActor2/save  Target2.root
/gate/actor/MyActor2/attachTo	Target2
/gate/actor/MyActor2/energySpectrum/setEmin 0 eV
/gate/actor/MyActor2/energySpectrum/setEmax 0.1 keV
/gate/actor/MyActor2/energySpectrum/setNumberOfBins 10
/gate/actor/MyActor2/energyLossHisto/setEmin 0 eV
/gate/actor/MyActor2/energyLossHisto/setEmax 0.1 keV
/gate/actor/MyActor2/energyLossHisto/setNumberOfBins 10
