
/control/execute mac/verbose.mac

#=====================================================
# GEOMETRY
#=====================================================

/control/execute mac/geometry.mac

#=====================================================
# PHYSICS
#=====================================================

/control/execute mac/physic.mac

/gate/physics/Gamma/SetCutInRegion      world 1 mm
/gate/physics/Electron/SetCutInRegion   world 1 mm
/gate/physics/Positron/SetCutInRegion   world 1 mm

/gate/physics/Gamma/SetCutInRegion      mainbox1 0.1 mm
/gate/physics/Electron/SetCutInRegion   mainbox1 0.1 mm
/gate/physics/Positron/SetCutInRegion   mainbox1 0.1 mm

/gate/physics/SetMaxStepSizeInRegion world 1 mm
/gate/physics/ActivateStepLimiter proton       
/gate/physics/ActivateStepLimiter deuteron     
/gate/physics/ActivateStepLimiter triton       
/gate/physics/ActivateStepLimiter alpha        
/gate/physics/ActivateStepLimiter GenericIon   

/gate/physics/displayCuts

#=====================================================
# MATRIX FOR DOSE MAP OUTPUT
#=====================================================

/gate/actor/addActor                               DoseActor  doseDistribution
/gate/actor/doseDistribution/save                  output/proton.hdr
/gate/actor/doseDistribution/attachTo    	   mainbox1
/gate/actor/doseDistribution/stepHitType           random
/gate/actor/doseDistribution/setPosition           0 0 0 cm
/gate/actor/doseDistribution/setResolution         1 1 600 
/gate/actor/doseDistribution/saveEveryNSeconds     60
/gate/actor/doseDistribution/enableEdep            true
/gate/actor/doseDistribution/enableUncertaintyEdep true
/gate/actor/doseDistribution/enableDose            false
/gate/actor/doseDistribution/enableUncertaintyDose false
/gate/actor/doseDistribution/enableNumberOfHits    false

/gate/actor/addActor               SimulationStatisticActor stat
/gate/actor/stat/save              output/stat-proton.txt
/gate/actor/stat/saveEveryNSeconds 60


#=====================================================
# INITIALISATION
#=====================================================

/gate/run/initialize

# Enable the following lines to display available and enabled processes
# /gate/physics/processList Available
# /gate/physics/processList Enabled


#=====================================================
# BEAMS
#=====================================================

/gate/source/addSource mybeam gps

/gate/source/mybeam/gps/particle ion 
/gate/source/mybeam/gps/ion 6 12 
/gate/source/mybeam/gps/pos/type Point
/gate/source/mybeam/gps/pos/rot1 0 1 0
/gate/source/mybeam/gps/pos/rot2 1 0 0
/gate/source/mybeam/gps/pos/shape Circle
/gate/source/mybeam/gps/pos/centre 0 0 -35 cm
#/gate/source/mybeam/gps/pos/sigm  a_x 9 mm
#/gate/source/mybeam/gps/pos/sigma_y 9 mm
/gate/source/mybeam/gps/ene/mono 3660 MeV
/gate/source/mybeam/gps/ene/type Gauss
/gate/source/mybeam/gps/ene/sigma 2.0 MeV
/gate/source/mybeam/gps/direction 0 0 1

#=====================================================
# VISUALISATION
#=====================================================

#/control/execute mac/visu.mac
#/control/execute mac/visu-XML.mac

#=====================================================
# START BEAMS
#=====================================================

# JamesRandom Ranlux64 MersenneTwister
/gate/random/setEngineName MersenneTwister
/gate/random/setEngineSeed 1021

# /gate/random/verbose 1
# /gate/source/verbose 0

/gate/application/noGlobalOutput
/gate/application/setTotalNumberOfPrimaries 10
/gate/application/start

exit
