#Display
/gate/physics/processList Enabled
/gate/physics/displayCuts

#Ionization potential of water
/gate/geometry/setIonisationPotential Water 75 eV

#Binning parameter
/gate/physics/setEMin 100 eV
/gate/physics/setEMax 1 GeV
/gate/physics/setDEDXBinning 350
/gate/physics/setLambdaBinning 350

#Cut
/gate/physics/Gamma/SetCutInRegion      world 1 mm
/gate/physics/Electron/SetCutInRegion   world 1 mm
/gate/physics/Positron/SetCutInRegion   world 1 mm

#Tracking cut
/gate/physics/SetMinRemainingRangeInRegion world 1 mm
/gate/physics/ActivateSpecialCuts e-

#stepLimiter
/gate/physics/SetMaxStepSizeInRegion world 1 mm
/gate/physics/ActivateStepLimiter proton
/gate/physics/ActivateStepLimiter deuteron
/gate/physics/ActivateStepLimiter triton
/gate/physics/ActivateStepLimiter alpha
/gate/physics/ActivateStepLimiter GenericIon

#stepFunction-Opt3
/gate/physics/processes/HadronIonisation/setStepFunction proton 0.2 50 um
/gate/physics/processes/IonIonisation/setStepFunction GenericIon 0.1 20 um
/gate/physics/processes/IonIonisation/setStepFunction alpha 0.1 20 um
/gate/physics/processes/IonIonisation/setStepFunction deuteron 0.1 20 um
/gate/physics/processes/IonIonisation/setStepFunction triton 0.1 20 um
/gate/physics/processes/ElectronIonisation/setStepFunction e- 0.2 100 um
/gate/physics/processes/ElectronIonisation/setStepFunction e+ 0.2 100 um

#linearEnergyLossLimit-Opt3
/gate/physics/processes/HadronIonisation/setLinearLossLimit proton 0.01
/gate/physics/processes/ElectronIonisation/setLinearLossLimit electron 0.01

#stepLimitType
#Opt3 (e-/e+)
/gate/physics/processes/MultipleScattering/setGeometricalStepLimiterType e- distanceToBoundary
/gate/physics/processes/MultipleScattering/setGeometricalStepLimiterType e+ distanceToBoundary
#Protons
/gate/physics/processes/MultipleScattering/setGeometricalStepLimiterType proton safety
