
/control/execute mac/verbose.mac
#/control/execute mac/visu.mac

#=====================================================
# GEOMETRY
#=====================================================

/control/execute mac/geometry.mac

#=====================================================
# Physics-list
#=====================================================
/control/execute mac/physics-proton-binarycascade.mac

#=====================================================
# cut and step max
#=====================================================

/gate/physics/Gamma/SetCutInRegion      world 1 mm
/gate/physics/Electron/SetCutInRegion   world 1 mm
/gate/physics/Positron/SetCutInRegion   world 1 mm

/gate/physics/Gamma/SetCutInRegion      mainbox 0.1 mm
/gate/physics/Electron/SetCutInRegion   mainbox 0.1 mm
/gate/physics/Positron/SetCutInRegion   mainbox 0.1 mm

/gate/physics/SetMaxStepSizeInRegion world .1 mm
/gate/physics/ActivateStepLimiter proton
/gate/physics/ActivateStepLimiter deuteron
/gate/physics/ActivateStepLimiter triton
/gate/physics/ActivateStepLimiter alpha
/gate/physics/ActivateStepLimiter GenericIon

/gate/physics/displayCuts

#=====================================================
# ACTORS
#=====================================================

#/gate/actor/addActor                 ProductionAndStoppingActor prodgamma
#/gate/actor/prodgamma/save           output/proton-binarycascade-gamma.txt
#/gate/actor/prodgamma/attachTo       mainbox
#/gate/actor/prodgamma/stepHitType    random
#/gate/actor/prodgamma/setPosition    0 0 0 cm
#/gate/actor/prodgamma/setResolution  1 1 600
#/gate/actor/prodgamma/saveEveryNSeconds 60
#/gate/actor/prodgamma/stepHitType    post
#/gate/actor/prodgamma/addFilter      particleFilter
#/gate/actor/prodgamma/particleFilter/addParticle gamma

/gate/actor/addActor               ProductionAndStoppingActor prodO15
/gate/actor/prodO15/save           output/proton-binarycascade-O15.txt
/gate/actor/prodO15/attachTo       mainbox
/gate/actor/prodO15/stepHitType    random
/gate/actor/prodO15/setPosition    0 0 0 cm
/gate/actor/prodO15/setResolution  1 1 600
/gate/actor/prodO15/saveEveryNSeconds 60
/gate/actor/prodO15/stepHitType    post
/gate/actor/prodO15/addFilter      particleFilter
/gate/actor/prodO15/particleFilter/addParticle O15[0.0]

/gate/actor/addActor               ProductionAndStoppingActor prodC11
/gate/actor/prodC11/save           output/proton-binarycascade-C11.txt
/gate/actor/prodC11/attachTo       mainbox
/gate/actor/prodC11/stepHitType    random
/gate/actor/prodC11/setPosition    0 0 0 cm
/gate/actor/prodC11/setResolution  1 1 600
/gate/actor/prodC11/saveEveryNSeconds 60
/gate/actor/prodC11/stepHitType    post
/gate/actor/prodC11/addFilter      particleFilter
/gate/actor/prodC11/particleFilter/addParticle C11[0.0]

/gate/actor/addActor               ProductionAndStoppingActor prodC10
/gate/actor/prodC10/save           output/proton-binarycascade-C10.txt
/gate/actor/prodC10/attachTo       mainbox
/gate/actor/prodC10/stepHitType    random
/gate/actor/prodC10/setPosition    0 0 0 cm
/gate/actor/prodC10/setResolution  1 1 600
/gate/actor/prodC10/saveEveryNSeconds 60
/gate/actor/prodC10/stepHitType    post
/gate/actor/prodC10/addFilter      particleFilter
/gate/actor/prodC10/particleFilter/addParticle C10[0.0]

/gate/actor/addActor                               DoseActor  doseDistribution
/gate/actor/doseDistribution/save                  output/proton-binarycascade.txt
/gate/actor/doseDistribution/attachTo              mainbox
/gate/actor/doseDistribution/stepHitType           random
/gate/actor/doseDistribution/setPosition           0 0 0 cm
/gate/actor/doseDistribution/setResolution         1 1 600
/gate/actor/doseDistribution/saveEveryNSeconds     60
/gate/actor/doseDistribution/enableEdep            true
/gate/actor/doseDistribution/enableUncertaintyEdep true
/gate/actor/doseDistribution/enableDose            false
/gate/actor/doseDistribution/enableUncertaintyDose false
/gate/actor/doseDistribution/enableNumberOfHits    false

/gate/actor/addActor                           DoseActor  edepIntegral
/gate/actor/edepIntegral/save                  output/proton-binarycascade-integral.txt
/gate/actor/edepIntegral/attachTo              mainbox
/gate/actor/edepIntegral/stepHitType           random
/gate/actor/edepIntegral/setPosition           0 0 0 cm
/gate/actor/edepIntegral/setResolution         1 1 1
/gate/actor/edepIntegral/saveEveryNSeconds     60
/gate/actor/edepIntegral/enableEdep            true
/gate/actor/edepIntegral/enableUncertaintyEdep true
/gate/actor/edepIntegral/enableDose            false
/gate/actor/edepIntegral/enableUncertaintyDose false
/gate/actor/edepIntegral/enableNumberOfHits    false

/gate/actor/addActor               SimulationStatisticActor stat
/gate/actor/stat/save              output/proton-binarycascade-stat.txt
/gate/actor/stat/saveEveryNSeconds 60

#=====================================================
# INITIALISATION
#=====================================================

/gate/run/initialize

#=====================================================
# BEAMS
#=====================================================

/gate/source/addSource mybeam gps

/gate/source/mybeam/gps/particle proton
/gate/source/mybeam/gps/pos/type Point
/gate/source/mybeam/gps/pos/rot1 0 1 0
/gate/source/mybeam/gps/pos/rot2 1 0 0
/gate/source/mybeam/gps/pos/centre 0 0 -50 cm
/gate/source/mybeam/gps/ene/type Mono
/gate/source/mybeam/gps/ene/mono 134 MeV
/gate/source/mybeam/gps/direction 0 0 1

#=====================================================
# VISUALISATION
#=====================================================

#/control/execute mac/visu.mac

#=====================================================
# START BEAMS
#=====================================================

/gate/random/setEngineName MersenneTwister
/gate/random/setEngineSeed auto

/gate/application/noGlobalOutput
/gate/application/setTotalNumberOfPrimaries 100000
/gate/application/start

