#
# V O X E L I Z E D  M A T R I X   H O F F M A N   B R A I N   P H A N T O M

/gate/world/daughters/name                                hof_brain
/gate/world/daughters/insert                              regularMatrix
/gate/hof_brain/geometry/insertReader                     interfile
/gate/hof_brain/interfileReader/insertTranslator          range
/gate/hof_brain/interfileReader/rangeTranslator/readTable data/range_atten_brain.dat
/gate/hof_brain/interfileReader/rangeTranslator/describe  1
/gate/hof_brain/interfileReader/readFile                  data/brain_phantom.h33
/gate/hof_brain/placement/setTranslation                  0. 0. 0. mm
/gate/hof_brain/placement/setRotationAxis                 1 0 0
/gate/hof_brain/placement/setRotationAngle                0 deg
/gate/hof_brain/attachVoxelPhantomSD
/gate/hof_brain/setSkipEqualMaterials                    1

#/gate/world/daughters/insert                             fictitiousVoxelMap
