/control/execute mac/verbose.mac

#=====================================================
# GEOMETRY
#=====================================================

/gate/geometry/setMaterialDatabase data/GateMaterials.db

# World
/gate/world/geometry/setXLength       400. cm
/gate/world/geometry/setYLength       400. cm
/gate/world/geometry/setZLength       400. cm

# Ecat system
/gate/world/daughters/name                    ecat
/gate/world/daughters/insert		      cylinder
/gate/ecat/placement/setTranslation           0.0 0.0 0.0 cm
/gate/ecat/geometry/setRmax                   50 cm
/gate/ecat/geometry/setRmin                   43 cm
/gate/ecat/geometry/setHeight                 25 cm
/gate/ecat/setMaterial                        Air
/gate/ecat/vis/forceWireframe
/gate/ecat/vis/setColor                       red

# Block
/gate/ecat/daughters/name                     blockDetector
/gate/ecat/daughters/insert                   box
/gate/blockDetector/placement/setTranslation  46 0 0 cm
/gate/blockDetector/geometry/setXLength       2 cm
/gate/blockDetector/geometry/setYLength       5.35 cm 
/gate/blockDetector/geometry/setZLength       5.35 cm
/gate/blockDetector/setMaterial               Air
/gate/ecat/vis/forceWireframe
/gate/blockDetector/vis/setColor              green

# Crystal 
/gate/blockDetector/daughters/name             crystalUnit
/gate/blockDetector/daughters/insert           box
/gate/crystalUnit/placement/setTranslation     0.0 0.0 0.0 mm
/gate/crystalUnit/geometry/setXLength          20. mm
/gate/crystalUnit/geometry/setYLength          4. mm
/gate/crystalUnit/geometry/setZLength          4. mm
/gate/crystalUnit/setMaterial                  LSO
/gate/crystalUnit/vis/setColor                 yellow

/gate/blockDetector/repeaters/insert                  ring
/gate/blockDetector/ring/setRepeatNumber              46

/gate/blockDetector/repeaters/insert                  linear
/gate/blockDetector/linear/setRepeatNumber            4
/gate/blockDetector/linear/setRepeatVector            0.0 0.0 55 mm

/gate/crystalUnit/repeaters/insert                    cubicArray
/gate/crystalUnit/cubicArray/setRepeatNumberX         1
/gate/crystalUnit/cubicArray/setRepeatNumberY         12
/gate/crystalUnit/cubicArray/setRepeatNumberZ         12
/gate/crystalUnit/cubicArray/setRepeatVector          0.0 4.5 4.5 mm

/gate/systems/ecat/block/attach     blockDetector
/gate/systems/ecat/crystal/attach   crystalUnit

/gate/crystalUnit/attachCrystalSD

# Phantom
/gate/world/daughters/name hof_brain
/gate/world/daughters/insert ImageRegularParametrisedVolume
/gate/hof_brain/geometry/setImage data/brain_phantom.h33
/gate/hof_brain/geometry/setRangeToMaterialFile data/attenuation_range.dat
/gate/hof_brain/placement/setTranslation 0. 0. 0. mm
/gate/hof_brain/placement/setRotationAxis 1 0 0
/gate/hof_brain/placement/setRotationAngle 0 deg

/gate/hof_brain/attachPhantomSD

#=====================================================
# PHYSICS
#=====================================================

/gate/physics/addProcess PhotoElectric
/gate/physics/processes/PhotoElectric/setModel StandardModel

/gate/physics/addProcess Compton
/gate/physics/processes/Compton/setModel StandardModel

/gate/physics/addProcess RayleighScattering
/gate/physics/processes/RayleighScattering/setModel PenelopeModel

/gate/physics/addProcess ElectronIonisation
/gate/physics/processes/ElectronIonisation/setModel StandardModel e-
/gate/physics/processes/ElectronIonisation/setModel StandardModel e+

/gate/physics/addProcess Bremsstrahlung
/gate/physics/processes/Bremsstrahlung/setModel StandardModel e-
/gate/physics/processes/Bremsstrahlung/setModel StandardModel e+

/gate/physics/addProcess PositronAnnihilation

/gate/physics/addProcess eMultipleScattering e+
/gate/physics/addProcess eMultipleScattering e-

/gate/physics/processList Enabled
/gate/physics/processList Initialized

#/gate/physics/Gamma/SetCutInRegion      crystalUnit 1.0 cm
#/gate/physics/Electron/SetCutInRegion   crystalUnit 1.0 cm

#=====================================================
# SIMULATION STATISTICS
#=====================================================

/gate/actor/addActor   SimulationStatisticActor stat
/gate/actor/stat/save  output/stat-pet.txt

#=====================================================
# INITIALISATION
#=====================================================

/gate/run/initialize

#=====================================================
# DIGITIZER 
#=====================================================

/gate/digitizer/Singles/insert                        adder
/gate/digitizer/Singles/insert                        readout
/gate/digitizer/Singles/readout/setDepth              1
/gate/digitizer/Singles/insert                        blurring
/gate/digitizer/Singles/blurring/setResolution        0.26
/gate/digitizer/Singles/blurring/setEnergyOfReference 511. keV
/gate/digitizer/Singles/insert                        thresholder
/gate/digitizer/Singles/thresholder/setThreshold      350. keV
/gate/digitizer/Singles/insert                        upholder
/gate/digitizer/Singles/upholder/setUphold            650. keV

/gate/digitizer/Coincidences/setWindow          10. ns

/gate/digitizer/name                            delay
/gate/digitizer/insert                          coincidenceSorter
/gate/digitizer/delay/setWindow                 10. ns
/gate/digitizer/delay/setOffset                 500. ns

/gate/digitizer/name finalCoinc
/gate/digitizer/insert coincidenceChain
/gate/digitizer/finalCoinc/addInputName delay
/gate/digitizer/finalCoinc/addInputName Coincidences
/gate/digitizer/finalCoinc/usePriority true

/gate/digitizer/finalCoinc/describe

#=====================================================
# SOURCE 
#=====================================================

/gate/source/addSource voxel_brain voxel

/gate/source/voxel_brain/reader/insert interfile
/gate/source/voxel_brain/interfileReader/translator/insert range
/gate/source/voxel_brain/interfileReader/rangeTranslator/readTable data/activity_range.dat
/gate/source/voxel_brain/interfileReader/rangeTranslator/describe 1
/gate/source/voxel_brain/interfileReader/readFile data/brain_phantom.h33
/gate/source/voxel_brain/setPosition   -140.8 -140.8 -89.6 mm

/gate/source/voxel_brain/setType backtoback
/gate/source/voxel_brain/gps/particle gamma
/gate/source/voxel_brain/setForcedUnstableFlag true
/gate/source/voxel_brain/setForcedHalfLife 6586.2 s
/gate/source/voxel_brain/gps/energytype Mono
/gate/source/voxel_brain/gps/monoenergy 0.511 MeV
/gate/source/voxel_brain/gps/confine NULL
/gate/source/voxel_brain/gps/angtype iso
/gate/source/voxel_brain/dump 1

/gate/source/list

#=====================================================
# VISUALISATION
#=====================================================

#/control/execute mac/visu.mac

#=====================================================
# OUTPUTS
#=====================================================

# ROOT output
/gate/output/root/enable
/gate/output/root/setFileName             output/pet_results
/gate/output/root/setRootHitFlag          0
/gate/output/root/setRootSinglesFlag      1
/gate/output/root/setRootCoincidencesFlag 1
/gate/output/root/setRootdelayFlag        1
/gate/output/root/setRootNtupleFlag       0

/gate/output/sinogram/enable
/gate/output/sinogram/setTangCrystalBlurring 1.8 mm
/gate/output/sinogram/setAxialCrystalBlurring 1.8 mm
/gate/output/sinogram/verbose 2
/gate/output/sinogram/RawOutputEnable false
/gate/output/sinogram/setFileName output/pet_sinogram
/gate/output/sinogram/StoreDelayeds
/gate/output/sinogram/StoreScatters
/gate/output/sinogram/setInputDataName finalCoinc
/gate/output/sinogram/describe

/gate/output/ecat7/enable
/gate/output/ecat7/verbose 2
/gate/output/ecat7/setFileName output/pet_sinogram
/gate/output/ecat7/describe
/gate/output/ecat7/mashing 2
/gate/output/ecat7/span 9
/gate/output/ecat7/maxringdiff 22
/gate/output/ecat7/system 962
/gate/output/ecat7/IsotopeCode F-18
/gate/output/ecat7/IsotopeHalflife 6586.2 second
/gate/output/ecat7/IsotopeBranchingFraction 1.0
/gate/output/ecat7/version 8

#=====================================================
# START ACQUISITION
#=====================================================

# JamesRandom Ranlux64 MersenneTwister
/gate/random/setEngineName MersenneTwister
/gate/random/setEngineSeed 123456

/gate/application/setTimeSlice   5 s
/gate/application/setTimeStart   0 s
/gate/application/setTimeStop    5 s
/gate/application/startDAQ
