/control/execute mac/verbose.mac

#=====================================================
# GEOMETRY
#=====================================================

/gate/geometry/setMaterialDatabase data/GateMaterials.db

# World
/gate/world/geometry/setXLength 100 cm
/gate/world/geometry/setYLength 100 cm
/gate/world/geometry/setZLength 100 cm
/gate/world/setMaterial Air
/gate/world/vis/forceWireframe
/gate/world/vis/setColor black

# SPECThead system 
/gate/world/daughters/name SPECThead
/gate/world/daughters/insert box
/gate/SPECThead/geometry/setXLength  6.5 cm
/gate/SPECThead/geometry/setYLength 19.  cm
/gate/SPECThead/geometry/setZLength 28.  cm
/gate/SPECThead/placement/setTranslation  20.0 0. 0. cm
/gate/SPECThead/setMaterial Air
/gate/SPECThead/vis/forceWireframe

# Collimator
/gate/SPECThead/daughters/name collimator
/gate/SPECThead/daughters/insert box
/gate/collimator/geometry/setXLength 3. cm
/gate/collimator/geometry/setYLength 19. cm
/gate/collimator/geometry/setZLength 28. cm
/gate/collimator/placement/setTranslation  -1.75 0. 0. cm
/gate/collimator/setMaterial Lead
/gate/collimator/vis/setColor grey
/gate/collimator/vis/forceSolid

# First hole of air inserted in the collimator
/gate/collimator/daughters/name hole
/gate/collimator/daughters/insert hexagone
/gate/hole/geometry/setHeight 3. cm
/gate/hole/geometry/setRadius .15 cm
/gate/hole/placement/setRotationAxis 0 1 0
/gate/hole/placement/setRotationAngle 90 deg
/gate/hole/setMaterial Air

# The hole is repeated in an array
/gate/hole/repeaters/insert cubicArray
/gate/hole/cubicArray/setRepeatNumberX 1
/gate/hole/cubicArray/setRepeatNumberY 52
/gate/hole/cubicArray/setRepeatNumberZ 44
/gate/hole/cubicArray/setRepeatVector 0. 0.36  0.624 cm

# These holes are repeated in a linear oblique direction so as to have a quincunx set of holes
/gate/hole/repeaters/insert linear
/gate/hole/linear/setRepeatNumber 2
/gate/hole/linear/setRepeatVector 0. 0.18 0.312 cm

# Crystal volume 
/gate/SPECThead/daughters/name crystal
/gate/SPECThead/daughters/insert box
/gate/crystal/geometry/setXLength   1. cm
/gate/crystal/geometry/setYLength  19. cm
/gate/crystal/geometry/setZLength  28. cm
/gate/crystal/placement/setTranslation  0.25 0. 0. cm
/gate/crystal/setMaterial NaI
/gate/crystal/vis/forceSolid
/gate/crystal/vis/setColor yellow

# Back-compartment volume
/gate/SPECThead/daughters/name compartment
/gate/SPECThead/daughters/insert box
/gate/compartment/geometry/setXLength  2.5 cm
/gate/compartment/geometry/setYLength 19.  cm
/gate/compartment/geometry/setZLength 28.  cm
/gate/compartment/placement/setTranslation   2. 0. 0. cm
/gate/compartment/setMaterial Glass
/gate/compartment/vis/forceSolid
/gate/compartment/vis/setColor white

/gate/SPECThead/repeaters/insert ring
/gate/SPECThead/ring/setRepeatNumber 4

/gate/SPECThead/moves/insert orbiting
/gate/SPECThead/orbiting/setSpeed 6 deg/s
/gate/SPECThead/orbiting/setPoint1 0 0 0 cm
/gate/SPECThead/orbiting/setPoint2 0 0 1 cm

/gate/systems/SPECThead/crystal/attach crystal
/gate/systems/SPECThead/describe

/gate/crystal/attachCrystalSD

/gate/compartment/attachPhantomSD
/gate/SPECThead/attachPhantomSD
/gate/collimator/attachPhantomSD

# Table
/gate/world/daughters/name table
/gate/world/daughters/insert box
/gate/table/geometry/setXLength 8 cm
/gate/table/geometry/setYLength 0.6 cm
/gate/table/geometry/setZLength 34. cm
/gate/table/placement/setTranslation 0. -0.5 0. cm
/gate/table/setMaterial Glass
/gate/table/vis/forceSolid
/gate/table/vis/setColor white

/gate/table/attachPhantomSD

# Phantom
/gate/world/daughters/name Tube
/gate/world/daughters/insert cylinder
/gate/Tube/geometry/setRmin 0. cm
/gate/Tube/geometry/setRmax 0.2  cm
/gate/Tube/geometry/setHeight 20. cm
/gate/Tube/placement/setTranslation 2. 0. 0. cm
/gate/Tube/setMaterial Plastic
/gate/Tube/vis/forceSolid
/gate/Tube/vis/setColor blue

/gate/Tube/daughters/name Inside
/gate/Tube/daughters/insert cylinder
/gate/Inside/geometry/setRmin 0. cm
/gate/Inside/geometry/setRmax 0.1 cm
/gate/Inside/geometry/setHeight 20. cm
/gate/Inside/setMaterial Water
/gate/Inside/vis/forceSolid
/gate/Inside/vis/setColor cyan

/gate/Tube/attachPhantomSD
/gate/Inside/attachPhantomSD

#=====================================================
# PHYSICS
#=====================================================

/gate/physics/addProcess PhotoElectric
/gate/physics/processes/PhotoElectric/setModel LivermoreModel

/gate/physics/addProcess Compton
/gate/physics/processes/Compton/setModel PenelopeModel

/gate/physics/addProcess RayleighScattering
/gate/physics/processes/RayleighScattering/setModel PenelopeModel

/gate/physics/addProcess ElectronIonisation
/gate/physics/processes/ElectronIonisation/setModel StandardModel e-
/gate/physics/processes/ElectronIonisation/setModel StandardModel e+

/gate/physics/addProcess Bremsstrahlung
/gate/physics/processes/Bremsstrahlung/setModel StandardModel e-
/gate/physics/processes/Bremsstrahlung/setModel StandardModel e+

/gate/physics/addProcess eMultipleScattering e+
/gate/physics/addProcess eMultipleScattering e-

/gate/physics/processList Enabled
/gate/physics/processList Initialized

/gate/physics/Electron/SetCutInRegion   SPECThead 10. cm

#=====================================================
# SIMULATION STATISTICS
#=====================================================

/gate/actor/addActor   SimulationStatisticActor stat
/gate/actor/stat/save  output/stat-spect.txt

#=====================================================
# INITIALISATION
#=====================================================

/gate/run/initialize

#=====================================================
# DIGITIZER 
#=====================================================

/gate/digitizer/Singles/insert adder
/gate/digitizer/Singles/insert blurring
/gate/digitizer/Singles/blurring/setResolution 0.10
/gate/digitizer/Singles/blurring/setEnergyOfReference 140. keV
/gate/digitizer/Singles/insert spblurring
/gate/digitizer/Singles/spblurring/setSpresolution 2.0 mm
/gate/digitizer/Singles/spblurring/verbose 0
/gate/digitizer/Singles/insert thresholder
/gate/digitizer/Singles/thresholder/setThreshold 80. keV
/gate/digitizer/Singles/insert upholder
/gate/digitizer/Singles/upholder/setUphold 160. keV

#=====================================================
# SOURCE 
#=====================================================

/gate/source/addSource linesource
/gate/source/linesource/gps/type Volume
/gate/source/linesource/gps/shape Cylinder
/gate/source/linesource/gps/radius 0.1 cm
/gate/source/linesource/gps/halfz 9. cm
/gate/source/linesource/gps/centre 2. 0. 0. cm
/gate/source/linesource/gps/particle gamma
/gate/source/linesource/gps/energy 140. keV
/gate/source/linesource/setActivity 200000. Bq
/gate/source/linesource/gps/angtype iso

#=====================================================
# VISUALISATION
#=====================================================

#/control/execute mac/visu.mac

#=====================================================
# OUTPUTS
#=====================================================

# ROOT output
/gate/output/root/enable
/gate/output/root/setFileName output/spect_results
/gate/output/root/setRootSinglesAdderFlag 1
/gate/output/root/setRootSinglesBlurringFlag 1 
/gate/output/root/setRootSinglesSpblurringFlag 0
/gate/output/root/setRootSinglesThresholderFlag 1
/gate/output/root/setRootSinglesUpholderFlag 1

# Specific SPECTHead system projection output (here an arbitrary 64 x 64 projection matrix)
/gate/output/projection/enable
/gate/output/projection/setFileName output/spect_projection
/gate/output/projection/pixelSizeX 2.5 mm
/gate/output/projection/pixelSizeY 4. mm
/gate/output/projection/pixelNumberX 64
/gate/output/projection/pixelNumberY 64
/gate/output/projection/projectionPlane YZ

#=====================================================
# START ACQUISITION
#=====================================================

# JamesRandom Ranlux64 MersenneTwister
/gate/random/setEngineName MersenneTwister
/gate/random/setEngineSeed 123456

# We define 3 runs of 2 sec, so that there is a rotation of 30° between each run (with 4 heads, we do a 360° scan)
/gate/application/setTimeSlice      2  s
/gate/application/setTimeStart      0  s
/gate/application/setTimeStop       6 s
/gate/application/startDAQ

