
#/gate/actor/addActor PhaseSpaceActor MyFirstSlicePhaseSpaceActor
#/gate/actor/MyFirstSlicePhaseSpaceActor/save output/{Name}_det0.root
#/gate/actor/MyFirstSlicePhaseSpaceActor/attachTo det0
#/gate/actor/MyFirstSlicePhaseSpaceActor/enableProductionProcess	true
#/gate/actor/MyFirstSlicePhaseSpaceActor/enableXDirection	true
##/gate/actor/MyFirstSlicePhaseSpaceActor/useVolumeFrame

/gate/actor/addActor PhaseSpaceActor actorDet0
/gate/actor/actorDet0/save output/{Name}_det0.root
/gate/actor/actorDet0/attachTo det0
#/gate/actor/actorDet0/enableProductionProcess	false
/gate/actor/actorDet0/enableXDirection	true
#/gate/actor/MyFirstSlicePhaseSpaceActor/useVolumeFrame


/gate/actor/addActor PhaseSpaceActor actorDet1
/gate/actor/actorDet1/save output/{Name}_det1.root
/gate/actor/actorDet1/attachTo det1
#/gate/actor/actorDet1/enableProductionProcess	true
/gate/actor/actorDet1/enableXDirection	true
#/gate/actor/MyFirstSlicePhaseSpaceActor/useVolumeFrame


/gate/actor/addActor PhaseSpaceActor actorDet2
/gate/actor/actorDet2/save output/{Name}_det2.root
/gate/actor/actorDet2/attachTo det2
#/gate/actor/actorDet2/enableProductionProcess	true
/gate/actor/actorDet2/enableXDirection	true
#/gate/actor/MyFirstSlicePhaseSpaceActor/useVolumeFrame


/gate/actor/addActor PhaseSpaceActor actorDet3
/gate/actor/actorDet3/save output/{Name}_det3.root
/gate/actor/actorDet3/attachTo det3
#/gate/actor/actorDet3/enableProductionProcess	true
/gate/actor/actorDet3/enableXDirection	true
#/gate/actor/MyFirstSlicePhaseSpaceActor/useVolumeFrame

/gate/actor/addActor PhaseSpaceActor actorDet4
/gate/actor/actorDet4/save output/{Name}_det4.root
/gate/actor/actorDet4/attachTo det4
#/gate/actor/actorDet4/enableProductionProcess	true
/gate/actor/actorDet4/enableXDirection	true
#/gate/actor/MyFirstSlicePhaseSpaceActor/useVolumeFrame


/gate/actor/addActor PhaseSpaceActor actorDet5
/gate/actor/actorDet5/save output/{Name}_det5.root
/gate/actor/actorDet5/attachTo det5
#/gate/actor/actorDet4/enableProductionProcess	true
/gate/actor/actorDet5/enableXDirection	true
#/gate/actor/MyFirstSlicePhaseSpaceActor/useVolumeFrame

/gate/actor/addActor PhaseSpaceActor actorDet6
/gate/actor/actorDet6/save output/{Name}_det6.root
/gate/actor/actorDet6/attachTo det6
#/gate/actor/actorDet4/enableProductionProcess	true
/gate/actor/actorDet6/enableXDirection	true
#/gate/actor/MyFirstSlicePhaseSpaceActor/useVolumeFrame

/gate/actor/addActor PhaseSpaceActor actorDet7
/gate/actor/actorDet7/save output/{Name}_det7.root
/gate/actor/actorDet7/attachTo det7
#/gate/actor/actorDet4/enableProductionProcess	true
/gate/actor/actorDet7/enableXDirection	true
#/gate/actor/MyFirstSlicePhaseSpaceActor/useVolumeFrame

# Phase Space actor
/gate/actor/addActor PhaseSpaceActor actorDet8
/gate/actor/actorDet8/save output/{Name}_det8.root
/gate/actor/actorDet8/attachTo det8
/gate/actor/actorDet8/enableXDirection	true


## Phase Space actor
#/gate/actor/addActor PhaseSpaceActor actorDet9
#/gate/actor/actorDet9/save output/{Name}_det9.root
#/gate/actor/actorDet9/attachTo det9
#/gate/actor/actorDet9/enableXDirection	true



## Phase Space actor
#/gate/actor/addActor PhaseSpaceActor actorDet10
#/gate/actor/actorDet10/save output/{Name}_det10.root
#/gate/actor/actorDet10/attachTo det10
#/gate/actor/actorDet10/enableXDirection	true



## Phase Space actor
#/gate/actor/addActor PhaseSpaceActor actorDet11
#/gate/actor/actorDet11/save output/{Name}_det11.root
#/gate/actor/actorDet11/attachTo det11
#/gate/actor/actorDet11/enableXDirection	true



## Phase Space actor
#/gate/actor/addActor PhaseSpaceActor actorDet12
#/gate/actor/actorDet12/save output/{Name}_det12.root
#/gate/actor/actorDet12/attachTo det12
#/gate/actor/actorDet12/enableXDirection	true




## Phase Space actor
#/gate/actor/addActor PhaseSpaceActor actorDet13
#/gate/actor/actorDet13/save output/{Name}_det13.root
#/gate/actor/actorDet13/attachTo det13
#/gate/actor/actorDet13/enableXDirection	true




## Phase Space actordet11
#/gate/actor/addActor PhaseSpaceActor actorDet14
#/gate/actor/actorDet14/save output/{Name}_det14.root
#/gate/actor/actorDet14/attachTo det14
#/gate/actor/actorDet14/enableXDirection	true




## Phase Space actor
#/gate/actor/addActor PhaseSpaceActor actorDet15
#/gate/actor/actorDet15/save output/{Name}_det15.root
#/gate/actor/actorDet15/attachTo det15
#/gate/actor/actorDet15/enableXDirection	true




## Phase Space actor
#/gate/actor/addActor PhaseSpaceActor actorDet16
#/gate/actor/actorDet16/save output/{Name}_det16.root
#/gate/actor/actorDet16/attachTo det16
#/gate/actor/actorDet16/enableXDirection	true




## Phase Space actor
#/gate/actor/addActor PhaseSpaceActor actorDet17
#/gate/actor/actorDet17/save output/{Name}_det17.root
#/gate/actor/actorDet17/attachTo det17
#/gate/actor/actorDet17/enableXDirection	true




## Phase Space actor
#/gate/actor/addActor PhaseSpaceActor actorDet18
#/gate/actor/actorDet18/save output/{Name}_det18.root
#/gate/actor/actorDet18/attachTo det18
#/gate/actor/actorDet18/enableXDirection	true




#/gate/actor/addActor PhaseSpaceActor MySecondSlicePhaseSpaceActor
#/gate/actor/MySecondSlicePhaseSpaceActor/save output/{Name}_MySecondSlicePhaseSpaceActor.root
#/gate/actor/MySecondSlicePhaseSpaceActor/attachTo det2
#/gate/actor/MySecondSlicePhaseSpaceActor/enableProductionProcess	true
#/gate/actor/MySecondSlicePhaseSpaceActor/enableXDirection	true
#/gate/actor/MySecondSlicePhaseSpaceActor/useVolumeFrame


#/gate/actor/addActor PhaseSpaceActor MyTotalPhantomPhaseSpaceActor
#/gate/actor/MyTotalPhantomPhaseSpaceActor/save output/{Name}_MyTotalPhantomPhaseSpaceActor.root
#/gate/actor/MyTotalPhantomPhaseSpaceActor/attachTo	phantom
#/gate/actor/MyTotalPhantomPhaseSpaceActor/enableProductionProcess	true
#/gate/actor/MyTotalPhantomPhaseSpaceActor/enableXDirection	true
#/gate/actor/MyTotalPhantomPhaseSpaceActor/storeSecondaries true
