/gate/actor/addActor                               DoseActor  doseProtonPFname
/gate/actor/doseProtonPFname/save                  output/{Name}_doseProton_ParticleFilter_Name.txt
/gate/actor/doseProtonPFname/attachTo    	   phantom
/gate/actor/doseProtonPFname/stepHitType           post
/gate/actor/doseProtonPFname/setPosition           0 0 0 cm
/gate/actor/doseProtonPFname/setVoxelSize  		   {PhantomSizeXY} {PhantomSizeXY} 0.1 mm
/gate/actor/doseProtonPFname/enableEdep            true
/gate/actor/doseProtonPFname/enableUncertaintyEdep false
/gate/actor/doseProtonPFname/enableDose            false
/gate/actor/doseProtonPFname/enableUncertaintyDose false
/gate/actor/doseProtonPFname/enableNumberOfHits    false
/gate/actor/doseProtonPFname/addFilter                    particleFilter
/gate/actor/doseProtonPFname/particleFilter/addParticle     proton

/gate/actor/addActor                               DoseActor  doseProtonPFZA
/gate/actor/doseProtonPFZA/save                  output/{Name}_doseProton_ParticleFilter_ZA.txt
/gate/actor/doseProtonPFZA/attachTo    	   phantom
/gate/actor/doseProtonPFZA/stepHitType           post
/gate/actor/doseProtonPFZA/setPosition           0 0 0 cm
/gate/actor/doseProtonPFZA/setVoxelSize  		   {PhantomSizeXY} {PhantomSizeXY} 0.1 mm
/gate/actor/doseProtonPFZA/enableEdep            true
/gate/actor/doseProtonPFZA/enableUncertaintyEdep false
/gate/actor/doseProtonPFZA/enableDose            false
/gate/actor/doseProtonPFZA/enableUncertaintyDose false
/gate/actor/doseProtonPFZA/enableNumberOfHits    false
/gate/actor/doseProtonPFZA/addFilter                    particleFilter
/gate/actor/doseProtonPFZA/particleFilter/addParticleZ   1
/gate/actor/doseProtonPFZA/particleFilter/addParticleA   1

/gate/actor/addActor                               DoseActor  doseProtonPFPDG
/gate/actor/doseProtonPFPDG/save                  output/{Name}_doseProton_ParticleFilter_PDG.txt
/gate/actor/doseProtonPFPDG/attachTo    	   phantom
/gate/actor/doseProtonPFPDG/stepHitType           post
/gate/actor/doseProtonPFPDG/setPosition           0 0 0 cm
/gate/actor/doseProtonPFPDG/setVoxelSize  		   {PhantomSizeXY} {PhantomSizeXY} 0.1 mm
/gate/actor/doseProtonPFPDG/enableEdep            true
/gate/actor/doseProtonPFPDG/enableUncertaintyEdep false
/gate/actor/doseProtonPFPDG/enableDose            false
/gate/actor/doseProtonPFPDG/enableUncertaintyDose false
/gate/actor/doseProtonPFPDG/enableNumberOfHits    false
/gate/actor/doseProtonPFPDG/addFilter                    particleFilter
/gate/actor/doseProtonPFPDG/particleFilter/addParticlePDG 2212
