/gate/source/addSource mybeam gps
/gate/source/mybeam/gps/particle ion
/gate/source/mybeam/gps/ion {ProjectileZ} {ProjectileNumberNuclei} 

/gate/source/mybeam/gps/pos/type Beam
/gate/source/mybeam/gps/pos/rot1 0 1 0
/gate/source/mybeam/gps/pos/rot2 1 0 0
/gate/source/mybeam/gps/pos/shape Circle
/gate/source/mybeam/gps/pos/centre 0 0 0 mm
/gate/source/mybeam/gps/pos/sigma_x {BeamSigmaX} mm
/gate/source/mybeam/gps/pos/sigma_y {BeamSigmaY} mm
/gate/source/mybeam/gps/ene/mono {BeamEnergy} MeV
/gate/source/mybeam/gps/ene/type Gauss
/gate/source/mybeam/gps/ene/sigma {BeamESigma} MeV
/gate/source/mybeam/gps/direction 0 0 1
