/gate/physics/addPhysicsList {PhysicsList}

/gate/physics/Gamma/SetCutInRegion      world {CutInWorld} mm
/gate/physics/Electron/SetCutInRegion   world {CutInWorld} mm
/gate/physics/Positron/SetCutInRegion   world {CutInWorld} mm

/gate/physics/Gamma/SetCutInRegion      phantom {CutInPhantom} mm
/gate/physics/Electron/SetCutInRegion   phantom {CutInPhantom} mm
/gate/physics/Positron/SetCutInRegion   phantom {CutInPhantom} mm

/gate/physics/SetMaxStepSizeInRegion world 0.09 mm
/gate/physics/ActivateStepLimiter proton
/gate/physics/ActivateStepLimiter deuteron
/gate/physics/ActivateStepLimiter triton
/gate/physics/ActivateStepLimiter alpha
/gate/physics/ActivateStepLimiter GenericIon



/gate/physics/addProcess RadioactiveDecay

/gate/physics/displayCuts
