
#=====================================================
# GEOMETRY
#=====================================================

/gate/geometry/setMaterialDatabase data/GateMaterials.db

# World
/gate/world/geometry/setXLength 5 m
/gate/world/geometry/setYLength 5 m
/gate/world/geometry/setZLength 5 m
/gate/world/setMaterial Air



# Global Box
/gate/world/daughters/name             mainbox1
/gate/world/daughters/insert           box
/gate/mainbox1/geometry/setXLength 40 cm
/gate/mainbox1/geometry/setYLength 40 cm
/gate/mainbox1/geometry/setZLength 40 cm
/gate/mainbox1/placement/setTranslation 0.0 0.0 25 cm
/gate/mainbox1/setMaterial Water
/gate/mainbox1/vis/setVisible 1
/gate/mainbox1/vis/setColor blue


/gate/geometry/setIonisationPotential Water 75 eV
/gate/geometry/setIonisationPotential Air 85.7 eV


#=====================================================
# PHYSICS
#=====================================================

/gate/physics/addPhysicsList QGSP_BERT_EMY
#/control/execute mac/physicslist_HAD_std_6_2_2.mac

/gate/physics/Gamma/SetCutInRegion      world 1 mm
/gate/physics/Electron/SetCutInRegion   world 1 mm
/gate/physics/Positron/SetCutInRegion   world 1 mm

/gate/physics/Gamma/SetCutInRegion      mainbox1 0.1 mm
/gate/physics/Electron/SetCutInRegion   mainbox1 0.1 mm
/gate/physics/Positron/SetCutInRegion   mainbox1 0.1 mm

/gate/physics/SetMaxStepSizeInRegion world 0.1 mm
/gate/physics/ActivateStepLimiter proton
/gate/physics/ActivateStepLimiter deuteron
/gate/physics/ActivateStepLimiter triton
/gate/physics/ActivateStepLimiter alpha
/gate/physics/ActivateStepLimiter GenericIon

#/gate/physics/SetMinKineticEnergyInRegion world 10 MeV
#/gate/physics/ActivateSpecialCuts proton

/gate/physics/displayCuts


#=====================================================
# MATRIX FOR DOSE MAP OUTPUT
#=====================================================

/gate/actor/addActor                               DoseActor  doseDistribution
/gate/actor/doseDistribution/save                  output/output-carbon.mhd
/gate/actor/doseDistribution/attachTo    	   mainbox1
/gate/actor/doseDistribution/stepHitType           random
/gate/actor/doseDistribution/setPosition           0 0 0 cm
/gate/actor/doseDistribution/setResolution         1 1 400
/gate/actor/doseDistribution/saveEveryNSeconds     60
/gate/actor/doseDistribution/enableEdep            true
/gate/actor/doseDistribution/enableUncertaintyEdep false
/gate/actor/doseDistribution/enableDose            false
/gate/actor/doseDistribution/enableUncertaintyDose false
/gate/actor/doseDistribution/enableNumberOfHits    false

/gate/actor/addActor                     DoseActor  dose3d
/gate/actor/dose3d/save                  output/carbon-3d.mhd
/gate/actor/dose3d/attachTo    	         mainbox1
/gate/actor/dose3d/stepHitType           random
/gate/actor/dose3d/setPosition           0 0 0 cm
/gate/actor/dose3d/setResolution         50 50 50
/gate/actor/dose3d/enableEdep            true
/gate/actor/dose3d/enableUncertaintyEdep true
/gate/actor/dose3d/enableDose            true
/gate/actor/dose3d/enableUncertaintyDose false
/gate/actor/dose3d/enableNumberOfHits    true

/gate/actor/addActor               SimulationStatisticActor stat
/gate/actor/stat/save              output/stat-carbon.txt
/gate/actor/stat/saveEveryNSeconds 60


#=====================================================
# INITIALISATION
#=====================================================

/gate/run/initialize
# Enable the following lines to display available and enabled processes
# /gate/physics/processList Available
# /gate/physics/processList Enabled


#=====================================================
# BEAMS
#=====================================================

/gate/source/addSource mybeam gps

/gate/source/mybeam/gps/particle ion
/gate/source/mybeam/gps/ion 6 12
/gate/source/mybeam/gps/pos/type Beam
/gate/source/mybeam/gps/pos/rot1 0 1 0
/gate/source/mybeam/gps/pos/rot2 1 0 0
/gate/source/mybeam/gps/pos/shape Circle
/gate/source/mybeam/gps/pos/centre 0 0 0 mm
/gate/source/mybeam/gps/pos/sigma_x 3 mm
/gate/source/mybeam/gps/pos/sigma_y 3 mm
/gate/source/mybeam/gps/ene/mono 2500 MeV
/gate/source/mybeam/gps/ene/type Gauss
/gate/source/mybeam/gps/ene/sigma 2.0 MeV
/gate/source/mybeam/gps/direction 0 0 1

#=====================================================
# VISUALISATION & VERBOSE
#=====================================================

/vis/disable
#/control/execute mac/visu.mac
#/control/execute mac/verbose.mac
# /gate/random/verbose 1
# /gate/source/verbose 0

#=====================================================
# START BEAMS
#=====================================================

/gate/random/setEngineName MersenneTwister
/gate/random/setEngineSeed 123456

/gate/application/noGlobalOutput
/gate/application/setTotalNumberOfPrimaries 200
/gate/application/start

exit
