
/control/execute mac/verbose.mac

#=====================================================
# GEOMETRY
#=====================================================

/gate/geometry/setMaterialDatabase data/GateMaterials.db

# World
/gate/world/geometry/setXLength 5 m
/gate/world/geometry/setYLength 5 m
/gate/world/geometry/setZLength 5 m
/gate/world/setMaterial Air


# Global Box
/gate/world/daughters/name              mainbox2
/gate/world/daughters/insert            box
/gate/mainbox2/geometry/setXLength      40 cm
/gate/mainbox2/geometry/setYLength      40 cm
/gate/mainbox2/geometry/setZLength      40 cm
/gate/mainbox2/placement/setTranslation 0 0 25 cm
/gate/mainbox2/setMaterial Water
/gate/mainbox2/vis/setVisible 1
/gate/mainbox2/vis/setColor blue

#=====================================================
# PHYSICS
#=====================================================

/gate/physics/addPhysicsList emstandard_opt3

/gate/physics/Gamma/SetCutInRegion      world 0.1 mm
/gate/physics/Electron/SetCutInRegion   world 0.1 mm
/gate/physics/Positron/SetCutInRegion   world 0.1 mm

/gate/physics/Gamma/SetCutInRegion      mainbox2 0.1 mm
/gate/physics/Electron/SetCutInRegion   mainbox2 0.1 mm
/gate/physics/Positron/SetCutInRegion   mainbox2 0.1 mm

/gate/physics/displayCuts


#=====================================================
# DETECTORS
#=====================================================

/gate/actor/addActor                               DoseActor  doseDistribution
/gate/actor/doseDistribution/save                  output/output-gamma.mhd
/gate/actor/doseDistribution/attachTo    	   mainbox2
/gate/actor/doseDistribution/stepHitType           random
/gate/actor/doseDistribution/setPosition           0 0 0 cm
/gate/actor/doseDistribution/setResolution         1 1 400
#/gate/actor/doseDistribution/saveEveryNSeconds     60
/gate/actor/doseDistribution/enableEdep            true
/gate/actor/doseDistribution/enableUncertaintyEdep false
/gate/actor/doseDistribution/enableDose            false
/gate/actor/doseDistribution/enableUncertaintyDose false
/gate/actor/doseDistribution/enableNumberOfHits    false

/gate/actor/addActor                     DoseActor  dose3d
/gate/actor/dose3d/save                  output/gamma-3d.mhd
/gate/actor/dose3d/attachTo    	         mainbox2
/gate/actor/dose3d/stepHitType           random
/gate/actor/dose3d/setPosition           0 0 0 cm
/gate/actor/dose3d/setSize               20 20 40 cm
/gate/actor/dose3d/setResolution         20 20 40
#/gate/actor/dose3d/saveEveryNSeconds     60
/gate/actor/dose3d/enableEdep            true
/gate/actor/dose3d/enableUncertaintyEdep true
/gate/actor/dose3d/enableDose            true
/gate/actor/dose3d/enableUncertaintyDose false
/gate/actor/dose3d/enableNumberOfHits    false

/gate/actor/addActor               SimulationStatisticActor stat
/gate/actor/stat/save              output/stat-gamma.txt
#/gate/actor/stat/saveEveryNSeconds 60


#=====================================================
# INITIALISATION
#=====================================================

/gate/run/initialize

# Enable the following lines to display available and enabled processes
# /gate/physics/processList Available
# /gate/physics/processList Enabled


#=====================================================
# BEAMS
#=====================================================


/gate/source/addSource mybeam gps

/gate/source/mybeam/gps/particle gamma
/gate/source/mybeam/gps/pos/type Beam
/gate/source/mybeam/gps/pos/rot1 0 1 0
/gate/source/mybeam/gps/pos/rot2 1 0 0
/gate/source/mybeam/gps/pos/shape Circle
/gate/source/mybeam/gps/pos/centre 0 0 0 mm
/gate/source/mybeam/gps/pos/sigma_x 3 mm
/gate/source/mybeam/gps/pos/sigma_y 3 mm
/gate/source/mybeam/gps/ene/mono 18 MeV
/gate/source/mybeam/gps/ene/type Gauss
/gate/source/mybeam/gps/ene/sigma 1.0 MeV
/gate/source/mybeam/gps/direction 0 0 1

#=====================================================
# VISUALISATION
#=====================================================

#/control/execute mac/visu.mac

#=====================================================
# START BEAMS
#=====================================================

# JamesRandom Ranlux64 MersenneTwister
/gate/random/setEngineName MersenneTwister
/gate/random/setEngineSeed 123456

# /gate/random/verbose 1
# /gate/source/verbose 0

/gate/application/noGlobalOutput
/gate/application/setTotalNumberOfPrimaries 50000
/gate/application/start
