###################
#  Visualisation  #
###################

/vis/disable
#/control/execute visu.mac

#####################
#  Mandatory  fGate #
#####################

/gate/geometry/setMaterialDatabase GateMaterials.db

#############
#   World   #
#############

/gate/world/geometry/setXLength 1.5 m
/gate/world/geometry/setYLength 1.5 m
/gate/world/geometry/setZLength 1.5 m
/gate/world/setMaterial Air
/gate/world/vis/forceWireframe
##############################
#   cylindricalPET scanner   #
##############################

/gate/world/daughters/name cylindricalPET
/gate/world/daughters/insert cylinder
/gate/cylindricalPET/setMaterial BGO
/gate/cylindricalPET/geometry/setRmax 450. mm
/gate/cylindricalPET/geometry/setRmin 430. mm
/gate/cylindricalPET/geometry/setHeight 24. cm
/gate/cylindricalPET/vis/forceSolid
/gate/cylindricalPET/vis/setColor red

/gate/systems/cylindricalPET/verbose 0

/gate/cylindricalPET/attachCrystalSD

##########################
#   Voxellized phantom   #
##########################

/gate/world/daughters/name mat25
#/gate/world/daughters/insert regularMatrix
/gate/world/daughters/insert fictitiousVoxelMap
/gate/mat25/geometry/insertReader interfile
/gate/mat25/interfileReader/insertTranslator range
/gate/mat25/interfileReader/rangeTranslator/readTable maps/atn.range
/gate/mat25/interfileReader/rangeTranslator/describe 1
/gate/mat25/interfileReader/readFile maps/corps_cubique.h33
/gate/mat25/placement/setTranslation  0. 0. 0. mm
/gate/mat25/attachVoxelPhantomSD
/gate/mat25/setSkipEqualMaterials 0
/gate/mat25/setFictitiousEnergy 111. keV
#/gate/mat25/setGammaDiscardEnergy 0.1 keV

/control/execute physicsFGATE.mac
#/control/execute physicsGate.mac

#####################
#   Initialisation  #
#####################

#/gate/geometry/enableAutoUpdate
#/run/initialize

/gate/run/initialize

##############################
#   Cubic voxelized source   #
##############################

/gate/source/addSource voxel voxel
/gate/source/voxel/reader/insert interfile
/gate/source/voxel/interfileReader/translator/insert range
/gate/source/voxel/interfileReader/rangeTranslator/readTable maps/act.range
/gate/source/voxel/interfileReader/rangeTranslator/describe 1
/gate/source/voxel/interfileReader/readFile maps/corps_cubique.h33
/gate/source/voxel/setPosition -150. -150. -350. mm

#/gate/source/voxel/gps/particle e+
/gate/source/voxel/setType backtoback
/gate/source/voxel/gps/particle gamma
/gate/source/voxel/gps/energytype Mono
/gate/source/voxel/gps/monoenergy 0.511 MeV
#/gate/source/voxel/gps/energytype Fluor18

/gate/source/voxel/setForcedUnstableFlag true
/gate/source/voxel/setForcedHalfLife 6586.2 s
/gate/source/voxel/gps/angtype iso


/gate/source/voxel/dump 1

##########################
#   Verbose and Output   #
##########################

/control/verbose 0
/run/verbose 0
/event/verbose 0
/tracking/verbose 0
#/gate/application/verbose 0
#/gate/source/verbose 0
#/gate/output/projection/verbose 0
#/gate/output/verbose 2	



### ROOT OUTPUT ###
/gate/output/root/enable
/gate/output/root/setFileName root
/gate/output/root/setRootHitFlag 0
/gate/output/root/setRootSinglesFlag 1
/gate/output/root/setRootCoincidencesFlag 0
/gate/output/root/setRootNtupleFlag 0

#   R A N D O M
# JamesRandom Ranlux64 MersenneTwister
/gate/random/setEngineName Ranlux64
#/gate/random/setEngineSeed default
#/gate/random/setEngineSeed auto
/gate/random/setEngineSeed 123456789
#/gate/random/resetEngineFrom fileName
/gate/random/verbose 1

############################
#   Measurement settings   #
############################

#/gate/cluster/setTimeSplitHalflife 6586.2 s

/gate/application/setTimeSlice 1. s
/gate/application/setTimeStart 0. s
/gate/application/setTimeStop 1. s

/gate/application/startDAQ

