/control/execute mac/verbose.mac

/control/execute mac/geometry.mac

/control/execute mac/actors.mac

#/control/execute mac/visu.mac

/gate/Volume/geometry/setImage                 data/dcm/ffp/playmo_0000.dcm
/gate/Volume/geometry/buildAndDumpDensityImage output/density-ffp-dcm.mhd
/gate/Volume/placement/setTranslation          -0.1 0. 0. mm # GEANT4 bug bypass

/gate/actor/DAVolume/save          output/DA-ffp-dcm.mhd
/gate/actor/DAVolume/setResolution 40 20 80

/control/execute mac/physics.mac

/control/execute mac/detectors.mac

/control/execute mac/initialisation.mac

/control/execute mac/beam.mac

/control/execute mac/startbeam.mac
