/control/execute mac/verbose.mac

/control/execute mac/geometry.mac

/control/execute mac/actors.mac

#/control/execute mac/visu.mac

/gate/Volume/geometry/setImage                 data/mhd/ffp.mhd
/gate/Volume/geometry/buildAndDumpDensityImage output/density-ffp-mhd.mhd
/gate/Volume/placement/setTranslation          -0.1 0. 0. mm # GEANT4 bug bypass

/gate/actor/DAVolume/save          output/DA-ffp-mhd.mhd
/gate/actor/DAVolume/setResolution 40 20 80

/control/execute mac/beam.mac

/control/execute mac/physics.mac

/control/execute mac/detectors.mac

/control/execute mac/initialisation.mac

/control/execute mac/startbeam.mac
