#/gate/source/addSource mybeam gps
/gate/source/mybeam/gps/particle gamma
/gate/source/mybeam/gps/ene/type User
/gate/source/mybeam/gps/hist/type energy
/gate/source/mybeam/gps/hist/point 0.008 0
/gate/source/mybeam/gps/hist/point 0.009  4.8947e-029
/gate/source/mybeam/gps/hist/point 0.010  1.03873e-021
/gate/source/mybeam/gps/hist/point 0.011  3.95621e-017
/gate/source/mybeam/gps/hist/point 0.012  1.40206e-013
/gate/source/mybeam/gps/hist/point 0.013  9.44572e-011
/gate/source/mybeam/gps/hist/point 0.014  2.34798e-008
/gate/source/mybeam/gps/hist/point 0.015  1.74745e-006
/gate/source/mybeam/gps/hist/point 0.016  3.21334e-005
/gate/source/mybeam/gps/hist/point 0.017  0.000339638
/gate/source/mybeam/gps/hist/point 0.018  0.00220792
/gate/source/mybeam/gps/hist/point 0.019   0.0109897
/gate/source/mybeam/gps/hist/point 0.020   0.0427841
/gate/source/mybeam/gps/hist/point 0.021    0.103694
/gate/source/mybeam/gps/hist/point 0.022    0.232918
/gate/source/mybeam/gps/hist/point 0.023    0.480798
/gate/source/mybeam/gps/hist/point 0.024    0.896863
/gate/source/mybeam/gps/hist/point 0.025     1.56059
/gate/source/mybeam/gps/hist/point 0.026     2.52308
/gate/source/mybeam/gps/hist/point 0.027     3.88715
/gate/source/mybeam/gps/hist/point 0.028     5.67971
/gate/source/mybeam/gps/hist/point 0.029     8.00572
/gate/source/mybeam/gps/hist/point 0.030     10.7233
/gate/source/mybeam/gps/hist/point 0.031     12.9893
/gate/source/mybeam/gps/hist/point 0.032     15.3785
/gate/source/mybeam/gps/hist/point 0.033     18.0074
/gate/source/mybeam/gps/hist/point 0.034     20.6479
/gate/source/mybeam/gps/hist/point 0.035     23.3979
/gate/source/mybeam/gps/hist/point 0.036     26.0981
/gate/source/mybeam/gps/hist/point 0.037     28.8472
/gate/source/mybeam/gps/hist/point 0.038     31.5814
/gate/source/mybeam/gps/hist/point 0.039     34.3389
/gate/source/mybeam/gps/hist/point 0.040     36.8299
/gate/source/mybeam/gps/hist/point 0.041     38.4474
/gate/source/mybeam/gps/hist/point 0.042      39.987
/gate/source/mybeam/gps/hist/point 0.043     41.5001
/gate/source/mybeam/gps/hist/point 0.044     42.8253
/gate/source/mybeam/gps/hist/point 0.045     44.0015
/gate/source/mybeam/gps/hist/point 0.046     45.2072
/gate/source/mybeam/gps/hist/point 0.047     46.3289
/gate/source/mybeam/gps/hist/point 0.048     46.9601
/gate/source/mybeam/gps/hist/point 0.049     47.4666
/gate/source/mybeam/gps/hist/point 0.050     48.0131
/gate/source/mybeam/gps/hist/point 0.051      48.048
/gate/source/mybeam/gps/hist/point 0.052     48.0549
/gate/source/mybeam/gps/hist/point 0.053     47.9776
/gate/source/mybeam/gps/hist/point 0.054     48.1167
/gate/source/mybeam/gps/hist/point 0.055     48.1937
/gate/source/mybeam/gps/hist/point 0.056     69.2606
/gate/source/mybeam/gps/hist/point 0.057     91.1206
/gate/source/mybeam/gps/hist/point 0.058     110.512
/gate/source/mybeam/gps/hist/point 0.059     130.426
/gate/source/mybeam/gps/hist/point 0.060     92.8293
/gate/source/mybeam/gps/hist/point 0.061     53.4947
/gate/source/mybeam/gps/hist/point 0.062     48.4355
/gate/source/mybeam/gps/hist/point 0.063     43.2189
/gate/source/mybeam/gps/hist/point 0.064     42.3333
/gate/source/mybeam/gps/hist/point 0.065     41.3057
/gate/source/mybeam/gps/hist/point 0.066      56.108
/gate/source/mybeam/gps/hist/point 0.067     71.1792
/gate/source/mybeam/gps/hist/point 0.068     58.5772
/gate/source/mybeam/gps/hist/point 0.069     45.4539
/gate/source/mybeam/gps/hist/point 0.070     37.9556
/gate/source/mybeam/gps/hist/point 0.071     30.3381
/gate/source/mybeam/gps/hist/point 0.072     29.2052
/gate/source/mybeam/gps/hist/point 0.073     27.9475
/gate/source/mybeam/gps/hist/point 0.074     27.8154
/gate/source/mybeam/gps/hist/point 0.075     27.7414
/gate/source/mybeam/gps/hist/point 0.076     27.1881
/gate/source/mybeam/gps/hist/point 0.077     26.5142
/gate/source/mybeam/gps/hist/point 0.078     26.1026
/gate/source/mybeam/gps/hist/point 0.079     25.3673
/gate/source/mybeam/gps/hist/point 0.080     25.0382
/gate/source/mybeam/gps/hist/point 0.081     24.2896
/gate/source/mybeam/gps/hist/point 0.082     23.9521
/gate/source/mybeam/gps/hist/point 0.083     23.0585
/gate/source/mybeam/gps/hist/point 0.084     22.4271
/gate/source/mybeam/gps/hist/point 0.085     21.7873
/gate/source/mybeam/gps/hist/point 0.086     21.4016
/gate/source/mybeam/gps/hist/point 0.087     21.0184
/gate/source/mybeam/gps/hist/point 0.088     20.3369
/gate/source/mybeam/gps/hist/point 0.089     19.6443
/gate/source/mybeam/gps/hist/point 0.090     19.2089
/gate/source/mybeam/gps/hist/point 0.091     18.7619
/gate/source/mybeam/gps/hist/point 0.092     18.2085
/gate/source/mybeam/gps/hist/point 0.093     17.6129
/gate/source/mybeam/gps/hist/point 0.094     17.0558
/gate/source/mybeam/gps/hist/point 0.095     16.4964
/gate/source/mybeam/gps/hist/point 0.096     15.9506
/gate/source/mybeam/gps/hist/point 0.097     15.4039
/gate/source/mybeam/gps/hist/point 0.098     15.0197
/gate/source/mybeam/gps/hist/point 0.099     14.6308
/gate/source/mybeam/gps/hist/point .100     14.0306
/gate/source/mybeam/gps/hist/point .101     13.4008
/gate/source/mybeam/gps/hist/point .102     13.0872
/gate/source/mybeam/gps/hist/point .103     12.6824
/gate/source/mybeam/gps/hist/point .104     12.0528
/gate/source/mybeam/gps/hist/point .105     11.4317
/gate/source/mybeam/gps/hist/point .106     10.8253
/gate/source/mybeam/gps/hist/point .107     10.2277
/gate/source/mybeam/gps/hist/point .108      9.7447
/gate/source/mybeam/gps/hist/point .109     9.23072
/gate/source/mybeam/gps/hist/point .110     8.63348
/gate/source/mybeam/gps/hist/point .111     8.03954
/gate/source/mybeam/gps/hist/point .112     7.87877
/gate/source/mybeam/gps/hist/point .113     7.68884
/gate/source/mybeam/gps/hist/point .114     7.06749
/gate/source/mybeam/gps/hist/point .115      6.3738
/gate/source/mybeam/gps/hist/point .116     6.04229
/gate/source/mybeam/gps/hist/point .117      5.7278
/gate/source/mybeam/gps/hist/point .118     5.32943
/gate/source/mybeam/gps/hist/point .119     4.88684
/gate/source/mybeam/gps/hist/point .120     4.38953
/gate/source/mybeam/gps/hist/point .121     3.70873
/gate/source/mybeam/gps/hist/point .122     3.18382
/gate/source/mybeam/gps/hist/point .123     2.81852
/gate/source/mybeam/gps/hist/point .124     2.51683
/gate/source/mybeam/gps/hist/point .125     2.19726
/gate/source/mybeam/gps/hist/point .126     1.69347
/gate/source/mybeam/gps/hist/point .127     1.20606
/gate/source/mybeam/gps/hist/point .128    0.387099
/gate/source/mybeam/gps/hist/point .129    0.330443
/gate/source/mybeam/gps/hist/point .130   0.0986302
/gate/source/mybeam/gps/hist/point .131           0
/gate/source/mybeam/gps/pos/halfx 8 mm
/gate/source/mybeam/gps/pos/halfy 8 mm
/gate/source/mybeam/gps/pos/rot1 1 0 0
/gate/source/mybeam/gps/pos/rot2 0 1 0
/gate/source/mybeam/gps/pos/centre 1060.0 0 -4.49218 mm
#/gate/source/mybeam/gps/pos/centre 0 0 1060 mm
#/gate/source/mybeam/gps/pos/type Point
/gate/source/mybeam/gps/pos/type Plane
/gate/source/mybeam/gps/pos/shape Rectangle
/gate/source/mybeam/gps/ang/type focused
/gate/source/mybeam/gps/ang/focuspoint 0 0 1000 mm

