# -----------------------------------------------------
# HU materials
/gate/HounsfieldMaterialGenerator/SetMaterialTable data/Schneider2000MaterialsTable.txt 
/gate/HounsfieldMaterialGenerator/SetDensityTable  data/Schneider2000DensitiesTable.txt
/gate/HounsfieldMaterialGenerator/SetDensityTolerance               0.1 g/cm3
/gate/HounsfieldMaterialGenerator/SetOutputMaterialDatabaseFilename data/HUmaterials-tol-0.1.db
/gate/HounsfieldMaterialGenerator/SetOutputHUMaterialFilename       data/HU2mat-tol-0.1.txt
/gate/HounsfieldMaterialGenerator/Generate


# -----------------------------------------------------
# Box FOV
/gate/world/daughters/name           FOV
/gate/world/daughters/insert         box
/gate/FOV/geometry/setXLength        0.8 m
/gate/FOV/geometry/setYLength        0.8 m
/gate/FOV/geometry/setZLength        0.8 m
/gate/FOV/setMaterial                Air
/gate/FOV/vis/setVisible             1
/gate/FOV/vis/setColor               green

# Rotation
# The patient is rotated instead of the linac => change rotation sign
/gate/FOV/moves/insert               rotation
/gate/FOV/rotation/setSpeed          1 deg/s
/gate/FOV/rotation/setAxis           0 -1 0
# Starting angle
/gate/FOV/placement/setRotationAxis  0 -1 0
/gate/FOV/placement/setRotationAngle 0 deg

# -----------------------------------------------------
# Patient
/gate/FOV/daughters/name patient

# --> Region
# /gate/FOV/daughters/insert                              ImageRegionalizedVolume
# /gate/patient/geometry/buildAndDumpDistanceTransfo      data/dmap.mhd
# /gate/patient/geometry/distanceMap                      data/dmap.mhd

# --> Nested
/gate/FOV/daughters/insert                              ImageNestedParametrisedVolume

# --> Commmon part
/gate/geometry/setMaterialDatabase                      data/HUmaterials-tol-0.1.db
/gate/patient/geometry/SetHUToMaterialFile              data/HU2mat-tol-0.1.txt
#/gate/patient/geometry/SetImage                         data/patient.mhd
#/gate/patient/geometry/SetImage                         data/headCT.mhd
#/gate/patient/geometry/SetHUToMaterialFile              data/sphere.mat
#/gate/patient/geometry/SetImage                         data/sphere.mha
/gate/patient/geometry/SetHUToMaterialFile              data/cylinder.mat
/gate/patient/geometry/SetImage                         data/cylinder.mha

#/gate/patient/geometry/TranslateTheImageAtThisIsoCenter 75.5 108.9 -646.7 mm
#/gate/patient/geometry/TranslateTheImageAtThisIsoCenter 0 0 0 mm
/gate/patient/geometry/buildAndDumpLabeledImage         data/patient-lung-2mm-label.mhd

# For visu debug, enable the following
#/gate/patient/geometry/enableBoundingBoxOnly            true

