#  *********************************************************************
#  * DISCLAIMER                                                        *
#  *                                                                   *
#  * Neither the authors of this software system, nor their employing  *
#  * institutes, nor the agencies providing financial support for this *
#  * work make any representation or warranty, express or implied,     *
#  * regarding this software system or assume any liability for its    *
#  * use.                                                              *
#  *                                                                   *
#  * This code implementation is the intellectual property of the      *
#  * OpenGATE collaboration.                                           *
#  * By copying, distributing or modifying the Program (or any work    *
#  * based on the Program) you indicate your acceptance of this        *
#  * statement, and all its terms.                                     *
#  *********************************************************************
#

/gate/verbose Physic    5
/gate/verbose Cuts      0
/gate/verbose SD        0
/gate/verbose Actions   0
/gate/verbose Actor     0
/gate/verbose Step      0
/gate/verbose Error     0
/gate/verbose Warning   0
/gate/verbose Output    0
/gate/verbose Beam      0
/gate/verbose Volume    0
/gate/verbose Image     0
/gate/verbose Geometry  0
/gate/verbose Core      0

/run/verbose 0
/event/verbose 0
/tracking/verbose 0	      
