#  *********************************************************************
#  * DISCLAIMER                                                        *
#  *                                                                   *
#  * Neither the authors of this software system, nor their employing  *
#  * institutes, nor the agencies providing financial support for this *
#  * work make any representation or warranty, express or implied,     *
#  * regarding this software system or assume any liability for its    *
#  * use.                                                              *
#  *                                                                   *
#  * This code implementation is the intellectual property of the      *
#  * OpenGATE collaboration.                                           *
#  * By copying, distributing or modifying the Program (or any work    *
#  * based on the Program) you indicate your acceptance of this        *
#  * statement, and all its terms.                                     *
#  *********************************************************************
#


#-------------------oooooOOOOO00000OOOOOooooo---------------------#
#                                                                 #
#                 D E R E N Z O   P H A N T O M                   #
#                                                                 #
#         F O R   S M A L L   A N I M A L   I M A G I N G         #
#                                                                 #         
#                       With 5 segments                           #
#                                                                 #   
#-------------------oooooOOOOO00000OOOOOooooo---------------------#

# Segment 1 _ diameter 2.5 mm

/gate/source/addSource sphere1
/gate/source/sphere1/setActivity 12500000. Bq
/gate/source/sphere1/gps/centre 0. 15.3 0. mm
/gate/source/sphere1/gps/particle e+
/gate/source/sphere1/gps/energytype Oxygen15
/gate/source/sphere1/gps/type Volume
/gate/source/sphere1/gps/shape Sphere
/gate/source/sphere1/gps/radius 1.25 mm
/gate/source/sphere1/gps/angtype iso
/gate/source/list

/gate/source/addSource sphere2
/gate/source/sphere2/setActivity 12500000. Bq
/gate/source/sphere2/gps/centre -2. 5.3 0. mm
/gate/source/sphere2/gps/particle e+
/gate/source/sphere2/gps/energytype Oxygen15
/gate/source/sphere2/gps/type Volume
/gate/source/sphere2/gps/shape Sphere
/gate/source/sphere2/gps/radius 1.25 mm
/gate/source/sphere2/gps/angtype iso
/gate/source/list

/gate/source/addSource sphere3
/gate/source/sphere3/setActivity 12500000. Bq
/gate/source/sphere3/gps/centre -10. 12. 0. mm
/gate/source/sphere3/gps/particle e+
/gate/source/sphere3/gps/energytype Oxygen15
/gate/source/sphere3/gps/type Volume
/gate/source/sphere3/gps/shape Sphere
/gate/source/sphere3/gps/radius 1.25 mm
/gate/source/sphere3/gps/angtype iso
/gate/source/list


# Segment 2 _ diameter 2.0 mm

/gate/source/addSource sphere4
/gate/source/sphere4/setActivity 10000000. Bq
/gate/source/sphere4/gps/centre -7.3 0. 0. mm
/gate/source/sphere4/gps/particle e+
/gate/source/sphere4/gps/energytype Oxygen15
/gate/source/sphere4/gps/type Volume
/gate/source/sphere4/gps/shape Sphere
/gate/source/sphere4/gps/radius 1. mm
/gate/source/sphere4/gps/angtype iso
/gate/source/list

/gate/source/addSource sphere5
/gate/source/sphere5/setActivity 10000000. Bq
/gate/source/sphere5/gps/centre -14.6 4. 0. mm
/gate/source/sphere5/gps/particle e+
/gate/source/sphere5/gps/energytype Oxygen15
/gate/source/sphere5/gps/type Volume
/gate/source/sphere5/gps/shape Sphere
/gate/source/sphere5/gps/radius 1. mm
/gate/source/sphere5/gps/angtype iso
/gate/source/list

/gate/source/addSource sphere6
/gate/source/sphere6/setActivity 10000000. Bq
/gate/source/sphere6/gps/centre -14.6 -4. 0. mm
/gate/source/sphere6/gps/particle e+
/gate/source/sphere6/gps/energytype Oxygen15
/gate/source/sphere6/gps/type Volume
/gate/source/sphere6/gps/shape Sphere
/gate/source/sphere6/gps/radius 1. mm
/gate/source/sphere6/gps/angtype iso
/gate/source/list

# Segment 3 _ diameter 1.5 mm

/gate/source/addSource sphere7
/gate/source/sphere7/setActivity 7500000. Bq
/gate/source/sphere7/gps/centre -2. -4.33 0. mm
/gate/source/sphere7/gps/particle e+
/gate/source/sphere7/gps/energytype Oxygen15
/gate/source/sphere7/gps/type Volume
/gate/source/sphere7/gps/shape Sphere
/gate/source/sphere7/gps/radius 0.75 mm
/gate/source/sphere7/gps/angtype iso
/gate/source/list

/gate/source/addSource sphere8
/gate/source/sphere8/setActivity 7500000. Bq
/gate/source/sphere8/gps/centre -6. -8.66 0. mm
/gate/source/sphere8/gps/particle e+
/gate/source/sphere8/gps/energytype Oxygen15
/gate/source/sphere8/gps/type Volume
/gate/source/sphere8/gps/shape Sphere
/gate/source/sphere8/gps/radius 0.75 mm
/gate/source/sphere8/gps/angtype iso
/gate/source/list

/gate/source/addSource sphere9
/gate/source/sphere9/setActivity 7500000. Bq
/gate/source/sphere9/gps/centre -10.6 -13.3 0. mm
/gate/source/sphere9/gps/particle e+
/gate/source/sphere9/gps/energytype Oxygen15
/gate/source/sphere9/gps/type Volume
/gate/source/sphere9/gps/shape Sphere
/gate/source/sphere9/gps/radius 0.75 mm
/gate/source/sphere9/gps/angtype iso
/gate/source/list


/gate/source/addSource sphere10
/gate/source/sphere10/setActivity 7500000. Bq
/gate/source/sphere10/gps/centre -5. -14.66 0. mm
/gate/source/sphere10/gps/particle e+
/gate/source/sphere10/gps/energytype Oxygen15
/gate/source/sphere10/gps/type Volume
/gate/source/sphere10/gps/shape Sphere
/gate/source/sphere10/gps/radius 0.75 mm
/gate/source/sphere10/gps/angtype iso
/gate/source/list

/gate/source/addSource sphere11
/gate/source/sphere11/setActivity 7500000. Bq
/gate/source/sphere11/gps/centre 0. -10.66 0. mm
/gate/source/sphere11/gps/particle e+
/gate/source/sphere11/gps/energytype Oxygen15
/gate/source/sphere11/gps/type Volume
/gate/source/sphere11/gps/shape Sphere
/gate/source/sphere11/gps/radius 0.75 mm
/gate/source/sphere11/gps/angtype iso
/gate/source/list

/gate/source/addSource sphere12
/gate/source/sphere12/setActivity 7500000. Bq
/gate/source/sphere12/gps/centre 1. -16.6 0. mm
/gate/source/sphere12/gps/particle e+
/gate/source/sphere12/gps/energytype Oxygen15
/gate/source/sphere12/gps/type Volume
/gate/source/sphere12/gps/shape Sphere
/gate/source/sphere12/gps/radius 0.75 mm
/gate/source/sphere12/gps/angtype iso
/gate/source/list


# Segment 4 _ diameter 1.25 mm

/gate/source/addSource sphere13
/gate/source/sphere13/setActivity 6000000. Bq
/gate/source/sphere13/gps/centre 5.6 -3.66 0. mm
/gate/source/sphere13/gps/particle e+
/gate/source/sphere13/gps/energytype Oxygen15
/gate/source/sphere13/gps/type Volume
/gate/source/sphere13/gps/shape Sphere
/gate/source/sphere13/gps/radius 0.625 mm
/gate/source/sphere13/gps/angtype iso
/gate/source/list

/gate/source/addSource sphere14
/gate/source/sphere14/setActivity 6000000. Bq
/gate/source/sphere14/gps/centre 10.6 -4. 0. mm
/gate/source/sphere14/gps/particle e+
/gate/source/sphere14/gps/energytype Oxygen15
/gate/source/sphere14/gps/type Volume
/gate/source/sphere14/gps/shape Sphere
/gate/source/sphere14/gps/radius 0.625 mm
/gate/source/sphere14/gps/angtype iso
/gate/source/list

/gate/source/addSource sphere15
/gate/source/sphere15/setActivity 6000000. Bq
/gate/source/sphere15/gps/centre 15.6 -4.33 0. mm
/gate/source/sphere15/gps/particle e+
/gate/source/sphere15/gps/energytype Oxygen15
/gate/source/sphere15/gps/type Volume
/gate/source/sphere15/gps/shape Sphere
/gate/source/sphere15/gps/radius 0.625 mm
/gate/source/sphere15/gps/angtype iso
/gate/source/list


/gate/source/addSource sphere16
/gate/source/sphere16/setActivity 6000000. Bq
/gate/source/sphere16/gps/centre 7.66 -8.33 0. mm
/gate/source/sphere16/gps/particle e+
/gate/source/sphere16/gps/energytype Oxygen15
/gate/source/sphere16/gps/type Volume
/gate/source/sphere16/gps/shape Sphere
/gate/source/sphere16/gps/radius 0.625 mm
/gate/source/sphere16/gps/angtype iso
/gate/source/list

/gate/source/addSource sphere17
/gate/source/sphere17/setActivity 6000000. Bq
/gate/source/sphere17/gps/centre 12.6 -8.33 0. mm
/gate/source/sphere17/gps/particle e+
/gate/source/sphere17/gps/energytype Oxygen15
/gate/source/sphere17/gps/type Volume
/gate/source/sphere17/gps/shape Sphere
/gate/source/sphere17/gps/radius 0.625 mm
/gate/source/sphere17/gps/angtype iso
/gate/source/list

/gate/source/addSource sphere18
/gate/source/sphere18/setActivity 6000000. Bq
/gate/source/sphere18/gps/centre 10. -12.6 0. mm
/gate/source/sphere18/gps/particle e+
/gate/source/sphere18/gps/energytype Oxygen15
/gate/source/sphere18/gps/type Volume
/gate/source/sphere18/gps/shape Sphere
/gate/source/sphere18/gps/radius 0.625 mm
/gate/source/sphere18/gps/angtype iso
/gate/source/list


# Segment 5 _ diameter 1.0 mm

/gate/source/addSource sphere19
/gate/source/sphere19/setActivity 5000000. Bq
/gate/source/sphere19/gps/centre 4. 3.66 0. mm
/gate/source/sphere19/gps/particle e+
/gate/source/sphere19/gps/energytype Oxygen15
/gate/source/sphere19/gps/type Volume
/gate/source/sphere19/gps/shape Sphere
/gate/source/sphere19/gps/radius 0.5 mm
/gate/source/sphere19/gps/angtype iso
/gate/source/list

/gate/source/addSource sphere20
/gate/source/sphere20/setActivity 5000000. Bq
/gate/source/sphere20/gps/centre 7.66 4.33  0. mm
/gate/source/sphere20/gps/particle e+
/gate/source/sphere20/gps/energytype Oxygen15
/gate/source/sphere20/gps/type Volume
/gate/source/sphere20/gps/shape Sphere
/gate/source/sphere20/gps/radius 0.5 mm
/gate/source/sphere20/gps/angtype iso
/gate/source/list

/gate/source/addSource sphere21
/gate/source/sphere21/setActivity 5000000. Bq
/gate/source/sphere21/gps/centre 11.33 4.66 0. mm
/gate/source/sphere21/gps/particle e+
/gate/source/sphere21/gps/energytype Oxygen15
/gate/source/sphere21/gps/type Volume
/gate/source/sphere21/gps/shape Sphere
/gate/source/sphere21/gps/radius 0.5 mm
/gate/source/sphere21/gps/angtype iso
/gate/source/list


/gate/source/addSource sphere22
/gate/source/sphere22/setActivity 5000000. Bq
/gate/source/sphere22/gps/centre 15.6 5.33 0. mm
/gate/source/sphere22/gps/particle e+
/gate/source/sphere22/gps/energytype Oxygen15
/gate/source/sphere22/gps/type Volume
/gate/source/sphere22/gps/shape Sphere
/gate/source/sphere22/gps/radius 0.5 mm
/gate/source/sphere22/gps/angtype iso
/gate/source/list

/gate/source/addSource sphere23
/gate/source/sphere23/setActivity 5000000. Bq
/gate/source/sphere23/gps/centre 5.33 7.33 0. mm
/gate/source/sphere23/gps/particle e+
/gate/source/sphere23/gps/energytype Oxygen15
/gate/source/sphere23/gps/type Volume
/gate/source/sphere23/gps/shape Sphere
/gate/source/sphere23/gps/radius 0.5 mm
/gate/source/sphere23/gps/angtype iso
/gate/source/list

/gate/source/addSource sphere24
/gate/source/sphere24/setActivity 5000000. Bq
/gate/source/sphere24/gps/centre 9. 8. 0. mm
/gate/source/sphere24/gps/particle e+
/gate/source/sphere24/gps/energytype Oxygen15
/gate/source/sphere24/gps/type Volume
/gate/source/sphere24/gps/shape Sphere
/gate/source/sphere24/gps/radius 0.5 mm
/gate/source/sphere24/gps/angtype iso
/gate/source/list

/gate/source/addSource sphere25
/gate/source/sphere25/setActivity 5000000. Bq
/gate/source/sphere25/gps/centre 13.33 8. 0. mm
/gate/source/sphere25/gps/particle e+
/gate/source/sphere25/gps/energytype Oxygen15
/gate/source/sphere25/gps/type Volume
/gate/source/sphere25/gps/shape Sphere
/gate/source/sphere25/gps/radius 0.5 mm
/gate/source/sphere25/gps/angtype iso
/gate/source/list


/gate/source/addSource sphere26
/gate/source/sphere26/setActivity 5000000. Bq
/gate/source/sphere26/gps/centre 7. 11.33 0. mm
/gate/source/sphere26/gps/particle e+
/gate/source/sphere26/gps/energytype Oxygen15
/gate/source/sphere26/gps/type Volume
/gate/source/sphere26/gps/shape Sphere
/gate/source/sphere26/gps/radius 0.5 mm
/gate/source/sphere26/gps/angtype iso
/gate/source/list

/gate/source/addSource sphere27
/gate/source/sphere27/setActivity 5000000. Bq
/gate/source/sphere27/gps/centre 11. 11.33 0. mm
/gate/source/sphere27/gps/particle e+
/gate/source/sphere27/gps/energytype Oxygen15
/gate/source/sphere27/gps/type Volume
/gate/source/sphere27/gps/shape Sphere
/gate/source/sphere27/gps/radius 0.5 mm
/gate/source/sphere27/gps/angtype iso
/gate/source/list

/gate/source/addSource sphere28
/gate/source/sphere28/setActivity 5000000. Bq
/gate/source/sphere28/gps/centre 8.33 14.66 0. mm
/gate/source/sphere28/gps/particle e+
/gate/source/sphere28/gps/energytype Oxygen15
/gate/source/sphere28/gps/type Volume
/gate/source/sphere28/gps/shape Sphere
/gate/source/sphere28/gps/radius 0.5 mm
/gate/source/sphere28/gps/angtype iso
/gate/source/list


