######################################################
# GUIDE: Fast Y90 source                             #
######################################################


#=====================================================
# VISUALISATION
#=====================================================

#/control/execute mac/visu.mac


#=====================================================
# MATERIAL DATABASE
#=====================================================

/gate/geometry/setMaterialDatabase data/GateMaterials.db


#=====================================================
# VERBOSE
#=====================================================

/control/execute mac/verbose.mac


#=====================================================
# GEOMETRY
#=====================================================

/control/execute mac/geometry.mac


#=====================================================
# PHYSICS
#=====================================================

/control/execute mac/physics.mac


#=====================================================
# OUTPUT
#=====================================================

/control/execute mac/output.mac


#=====================================================
# INITIALISATION
#=====================================================

/gate/run/initialize


#=====================================================
#  SOURCE
#=====================================================

/control/execute mac/source.mac



#====================================================
#  RANDOM
#====================================================
/gate/random/setEngineName MersenneTwister
/gate/random/setEngineSeed 1


#=====================================================
#   SIMULTAION # START BEAMS
#=====================================================
/gate/application/setTimeStart 0 s
/gate/application/setTimeStop  1 s
/gate/application/startDAQ
